CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|X:\Skin_rash\processed\tiffs
    Check image sets for unmatched or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.npy
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:.
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:ProbabStack
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    Rescale intensities?:No

ColorToGray:[module_num:2|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Nuc
    Channel number:2
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    Image name:Cyto
    Channel number:3
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    Image name:Bg
    Channel number:4
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    Image name:Membrane

ImageMath:[module_num:3|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
ImageMath:[module_num:4|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Membrane_Bg
    Image or measurement?:Image
    Select the first image:Membrane
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Bg
    Multiply the second image by:1.0
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
Smooth:[module_num:5|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
    Select the input image:Nuc
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):13,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_a
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Cells_a
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Membrane
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
RescaleObjects:[module_num:9|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
    Select the input objects:Cells
    Name the output objects:RescaledCells
    Select the operation:Downscale objects with a scaling factor
    Factor to scale the object mask:0.5

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:RescaledCells
    Name the output objects:ExpandedCells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:ExpandedCells
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:12|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
    Select the objects to filter:ExpandedCells
    Name the output objects:ExpandedCellsFilter
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:35
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:9
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:ExpandedCellsFilter
    Name the output image:CellImage
    Select the color format:uint16
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:ExpandedCellsFilter

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Elsewhere...|X:\\Skin_rash\\processed\\cpout
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellOutline
    Saved file format:tiff
    Output file location:Elsewhere...|X:\\Skin_rash\\processed\\cpout
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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