CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Tissue
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:Tissue
    Name the output object:TissueObject
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Tissue
    Name the primary objects to be identified:TissuePrimary
    Typical diameter of objects, in pixel units (Min,Max):1000,2000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:TissuePrimary
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Y:\\server_homes\\daniels\\Data\\Skin_rash\\processed\\cpout
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:TissuePrimary|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tissue_Mask
    Overwrite existing files without warning?:No
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